CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Load the images by matching files in the folder against the unique text pattern ']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:OG
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Splitthe RGB image into single Channel']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
    Select the input image:OG
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:Calculate1
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:Corrected_blue
    Select the illumination function:Calculate1
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Threshold:[module_num:8|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notes:['DAPI image thresholding. Needed for better identifying single nuclie']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
    Select the input image:OrigBlue
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:0.98
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify DAPI - nuclie as the primary object ']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
    Select the input image:Threshold
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:10|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notes:['Identify Astrocytes in red channel with reference to DAPI (primary object) as the seeding object']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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:OrigRed
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.9
    Threshold correction factor:0.40
    Lower and upper bounds on threshold:0.11,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:Binary_Secondary_Image
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:12|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
    Select the input image:Binary_Secondary_Image
    Name the output image:MorphologicalSkeleton

Morph:[module_num:13|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
    Select the input image:MorphologicalSkeleton
    Name the output image:MorphBlue
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Once
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    Select the operation to perform:endpoints
    Number of times to repeat operation:Once
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
OverlayOutlines:[module_num:14|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notes:['Quality control by overlaying the detected secondary object (astrocyte) on the oriinal image ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigRed
    Name the output image:Segmentation_QC
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:IdentifySecondaryObjects

OverlayOutlines:[module_num:15|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MorphologicalSkeleton
    Name the output image:Skeleton_QC
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:IdentifySecondaryObjects
    Select outline color:Green
    Select objects to display:IdentifyPrimaryObjects

MeasureObjectSkeleton:[module_num:16|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enabled:False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
    Select the seed objects:IdentifyPrimaryObjects
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:MorphologicalSkeleton
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectNeighbors:[module_num:17|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enabled:False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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:plasma
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:tab20b_r

MeasureObjectSizeShape:[module_num:18|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enabled:False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
    Select object sets to measure:IdentifyPrimaryObjects, IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:19|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enabled:False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
    Select images to measure:OrigBlue
    Select objects to measure:IdentifyPrimaryObjects

MeasureObjectIntensity:[module_num:20|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enabled:False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
    Select images to measure:OrigRed
    Select objects to measure:IdentifySecondaryObjects

SaveImages:[module_num:21|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Segmentation_QC
    Select method for constructing file names:From image filename
    Select image name for file prefix:OG
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Segmentation_QC_3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Skeleton_QC
    Select method for constructing file names:From image filename
    Select image name for file prefix:OG
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Skeleton_QC_3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ObjectNeighborCount
    Select method for constructing file names:From image filename
    Select image name for file prefix:OG
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Neighbour_Count_3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ClassifyObjects:[module_num:24|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enabled:False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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:IdentifySecondaryObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Input Folder sub-folder|Desktop/VJ_Microwave_EXP
    Rules or classifier file name:Astro.model
    Allow fuzzy feature matching?:No

ExportToSpreadsheet:[module_num:25|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop/VJ_Microwave_EXP/Datasheet/24.01.24
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifySecondaryObjects|AreaShape_MedianRadius,IdentifySecondaryObjects|AreaShape_Extent,IdentifySecondaryObjects|AreaShape_MaximumRadius,IdentifySecondaryObjects|AreaShape_Center_X,IdentifySecondaryObjects|AreaShape_Center_Y,IdentifySecondaryObjects|AreaShape_MinFeretDiameter,IdentifySecondaryObjects|AreaShape_MeanRadius,IdentifySecondaryObjects|AreaShape_ConvexArea,IdentifySecondaryObjects|AreaShape_BoundingBoxMaximum_Y,IdentifySecondaryObjects|AreaShape_BoundingBoxMaximum_X,IdentifySecondaryObjects|AreaShape_MajorAxisLength,IdentifySecondaryObjects|AreaShape_Area,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ASTRO
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:26|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Run_3
    Output file location:Default Input Folder sub-folder|Desktop/VJ_Microwave_EXP/Analyst_file
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Run_3.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Astrocyte
    Which objects should be used for locations?:IdentifySecondaryObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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