CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Load the images by matching files in the folder against the unique text pattern ']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:OG
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Splitthe RGB image into single Channel']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
    Select the input image:OG
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
Threshold:[module_num:6|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notes:['DAPI image thresholding. Needed for better identifying single nuclie']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
    Select the input image:OrigBlue
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:6
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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notes:['Identify DAPI - nuclie as the primary object ']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
    Select the input image:Threshold
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:8|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notes:['Identify Astrocytes in red channel with reference to DAPI (primary object) as the seeding object']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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:OrigGreen
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.9
    Threshold correction factor:0.40
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:IdentifyPrimaryObjects, IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:OrigBlue
    Select objects to measure:IdentifyPrimaryObjects

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:OrigGreen
    Select objects to measure:IdentifySecondaryObjects

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/VJ_Microwave_EXP/Microglia_Microwave/Datasheet
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Threshold_WeightedVariance_IdentifyPrimaryObjects,Image|Threshold_WeightedVariance_Threshold,Image|Threshold_WeightedVariance_IdentifySecondaryObjects,Image|Threshold_SumOfEntropies_IdentifyPrimaryObjects,Image|Threshold_SumOfEntropies_IdentifySecondaryObjects,Image|Threshold_SumOfEntropies_Threshold,Image|Threshold_FinalThreshold_IdentifySecondaryObjects,Image|Threshold_FinalThreshold_IdentifyPrimaryObjects,Image|Threshold_FinalThreshold_Threshold,Image|Threshold_GuideThreshold_IdentifySecondaryObjects,Image|Threshold_GuideThreshold_Threshold,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Micro
    Overwrite existing files without warning?:No
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